PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Pareidolia Experiment Survey
  keyboardBackend = PsychToolbox
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Routines
  Routine welcome_screen
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    CodeComponent codefix
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment tab
        from psychopy import visual, core, event
      Begin Routine:
        welcometext = visual.TextStim(win=win, name='welcometext',
            text=welcometext.text,
            font='Arial',
            pos=(0, 0), height=0.05,
            wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            depth=0.0)
    TextComponent welcometext
      letterHeight = 0.05
      startVal [time (s)] = 0.1
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      text:
        Welcome to this survey!
        Carefully READ the instructions and respond to the survey prompts accordingly. It's highly recommended that this be completed INDEPENDENTLY in one sitting.
    KeyboardComponent forwardkey
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    TextComponent advance
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3.5
      text = Press the 'right arrow' on your keyboard to continue. [There is no going back after advancing]
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  Routine warning_prep
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    TextComponent warningtime
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The 10 SECOND countdown will begin on the next screen.

        You will be shown an array of images and you must CHOOSE ONE IMAGE that stands out the MOST to you as QUICKLY as possible within the time limit using mouse input.
    KeyboardComponent forwardkey2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    TextComponent advance2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3.5
      text = Press the 'right arrow' on your keyboard to continue. 
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  Routine Experiment1_countdown
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    ImageComponent OnionGrid
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    CodeComponent First_grid_code
      Code Type = Py
      Begin Routine:
        import random
        from openpyxl import load_workbook, Workbook
        import psychopy.event
        import psychopy.core
        import psychopy.data
        import psychopy.visual

        # Load image filenames from Excel file
        workbook = load_workbook('onion_stimuli.xlsx')
        worksheet = workbook.active
        image_filenames = [cell.value for cell in worksheet['A'][1:]]  # Get values from column A, starting from row 2
        random.shuffle(image_filenames)

        # Find the index of the correct image
        for i, filename in enumerate(image_filenames):
            if filename.endswith("onionFace.jpeg"):
                correct_index = i
                correct_answer = filename
                break
        else:
            raise ValueError("'onionFace.jpeg' not found in the image filenames.")

        # Create the 4x4 grid of images with tighter spacing and center it on the screen
        positions = [[-0.325 + col * 0.1625, 0.325 - row * 0.1625] for row in range(4) for col in range(4)]

        # Initialize data file
        thisExp = psychopy.data.ExperimentHandler(name="Experiment", savePickle=False, saveWideText=True, dataFileName="experiment_data")

        # Initialize a boolean to store the correctness of the response
        response_correct = False

        # Initialize mouse
        mouse = psychopy.event.Mouse()

        # Create the 4x4 grid of ImageStim objects
        OnionGrid = [psychopy.visual.ImageStim(win=win, image=filename, pos=positions[i], size=(0.15, 0.15)) for i, filename in enumerate(image_filenames)]

        # Add a timer
        timer = psychopy.core.CountdownTimer(10)  # 10 seconds timer

        # Main experiment loop
        while timer.getTime() > 0:
            # Draw the grid of images
            for img in OnionGrid:
                img.draw()
            win.flip()

            # Check for mouse click
            for i, image in enumerate(OnionGrid):
                if mouse.getPressed()[0] and image.contains(mouse):
                    if image_filenames[i] == correct_answer:
                        response_correct = True
                    else:
                        response_correct = False
                    # Re-draw the images
                    for img in OnionGrid:
                        img.draw()
                    win.flip()
                    psychopy.core.wait(1)
                    break
            else:
                continue
            break

        # If no response, record it as incorrect
        if not response_correct:
            response_correct = False
            for img in OnionGrid:
                img.draw()
            win.flip()
            psychopy.core.wait(1)

        # Save the data for the Onion Grid experiment
        thisExp.addData('Onion Response Correctness', response_correct)
        thisExp.nextEntry()  # Move to the next row in the data file

        # End routine
        win.flip()  # Clear the screen
  Routine second_prep
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    TextComponent secondtestwarning
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next part of this survey, an array of images will be displayed for 35 seconds.

        Please observe these images CAREFULLY for the allotted time while waiting for the next instruction.
    KeyboardComponent forwardkey3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    TextComponent advance3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3.5
      text = Press the 'right arrow' on your keyboard to continue. 
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  Routine Experiement2_countdown
    RoutineSettingsComponent Experiement2_countdown
      stopVal [duration (s)] = 35.0
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    CodeComponent memory_timer
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core

        # Assuming you already have a window created and assigned to the variable `win`

        # Load the PNG image
        image_path = '24memorytest.png'
        image = visual.ImageStim(win=win, image=image_path, pos=(0, 0), size=(0.9, 0.7))

        # Create a text stimulus for the countdown timer
        timer_text = visual.TextStim(win=win, text='0:35', color='white', height=0.05, pos=(-0.5, 0.4))

        # Start the countdown timer
        timer = core.Clock()
        total_time = 35

        while timer.getTime() <= total_time:
            # Draw the image
            image.draw()

            # Draw the timer text
            remaining_time = total_time - timer.getTime()
            minutes = int(remaining_time // 60)
            seconds = int(remaining_time % 60)
            timer_text.text = '{:01d}:{:02d}'.format(minutes, seconds)
            timer_text.draw()

            # Update the window
            win.flip()

            core.wait(1)  # Update every second
  Routine End
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    TextComponent endtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating in this survey on Pareidolia. Did you notice the faces?
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    KeyboardComponent endkey
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    TextComponent endadvance
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 3.5
      text = Press the 'right arrow' on your keyboard to end and close the survey :D
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  Routine Experiment2_imageselection
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    ImageComponent TreeGrid
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    CodeComponent Second_grid_code
      Code Type = Py
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      Begin Routine:
        import random
        from openpyxl import load_workbook, Workbook
        import psychopy.event
        import psychopy.core
        import psychopy.data
        import psychopy.visual

        # Load or create the Excel file
        try:
            workbook = load_workbook('experiment_data.xlsx')
            worksheet = workbook.active
        except FileNotFoundError:
            workbook = Workbook()
            worksheet = workbook.active

        # Load image filenames from Excel file
        workbook = load_workbook('tree_stimuli.xlsx')
        worksheet = workbook.active
        image_filenames = [cell.value for cell in worksheet['A'][1:]]  # Get values from column A, starting from row 2
        random.shuffle(image_filenames)

        # Prepare correct answer lists
        correct_answers_treeface = [
            "Timages/TreeFace1.jpeg",
            "Timages/TreeFace3.jpeg",
            "Timages/TreeFace4.jpeg",
            "Timages/TreeFace5.jpeg",
            "Timages/TreeFace9.jpeg",
            "Timages/TreeFace11.jpeg",
            "Timages/TreeFace13.jpeg",
            "Timages/TreeFace14.jpeg",
            "Timages/TreeFace15.jpeg",
            "Timages/TreeFace18.jpeg",
            "Timages/TreeFace23.jpeg",
            "Timages/TreeFace24.jpeg"
        ]

        correct_answers_tree = [
            "Timages/Tree1.jpeg",
            "Timages/Tree2.jpeg",
            "Timages/Tree3.jpeg",
            "Timages/Tree10.jpeg",
            "Timages/Tree11.jpeg",
            "Timages/Tree12.jpeg",
            "Timages/Tree14.jpeg",
            "Timages/Tree15.jpeg",
            "Timages/Tree16.jpeg",
            "Timages/Tree17.jpeg",
            "Timages/Tree21.jpeg",
            "Timages/Tree22.jpeg"
        ]

        # Create the 6x8 grid of images with tighter spacing and center it on the screen
        positions = [[-0.6 + col * 0.12, 0.3 - row * 0.12] for row in range(6) for col in range(8)]

        # Initialize image components with slightly smaller size and centered position
        TreeGrid = [[psychopy.visual.ImageStim(win=win, name='TreeGrid', image=None,
                            pos=positions[row * 8 + col], size=(0.1, 0.1)) for col in range(8)] for row in range(6)]

        # Set images in the grid
        for i, image_file in enumerate(image_filenames):
            row = i // 8
            col = i % 8
            TreeGrid[row][col].setImage(image_file)

        # Set up mouse event handling
        mouse = psychopy.event.Mouse(win=win)

        # Initialize the number of correct responses
        num_correct_treeface = 0
        num_correct_tree = 0

        # Main experiment loop
        participant_choices = []
        while continueRoutine and len(participant_choices) < 24:
            # Draw all images
            for row in range(6):
                for col in range(8):
                    TreeGrid[row][col].draw()
            # Draw mouse cursor
            pos = mouse.getPos()
            buttons = mouse.getPressed()
            mouse_cursor = psychopy.visual.Circle(win, radius=0.001, fillColor='red', lineColor='red')
            mouse_cursor.pos = pos
            mouse_cursor.draw()
            win.flip()
            # Check for mouse click
            for row in range(6):
                for col in range(8):
                    if TreeGrid[row][col].contains(pos) and buttons[0]:
                        participant_choice = TreeGrid[row][col].image
                        participant_choices.append(participant_choice)
                        if participant_choice in correct_answers_treeface:
                            num_correct_treeface += 1
                        elif participant_choice in correct_answers_tree:
                            num_correct_tree += 1
                        TreeGrid[row][col].opacity = 0.3
                        break

        # Save the data for the Tree Grid experiment
        thisExp.addData('Tree Grid Correct Responses (TreeFace)', num_correct_treeface)
        thisExp.addData('Tree Grid Correct Responses (Tree)', num_correct_tree)

        # End routine
        psychopy.core.wait(2.5)  # Wait before clearing the screen
        win.flip()  # Clear the screen
  Routine Experiement2_instruction
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    TextComponent selectioninstruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, an array of 48 images will be shown.

        Select the 24 IMAGES that YOU REMEMBER seeing in the array previously shown. Answer to the best of your memory. There's no countdown. The experiment won't end until 24 images have been selected.
    KeyboardComponent forwardkey4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    TextComponent advance4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3.5
      text = Press the 'right arrow' on your keyboard to continue. 
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  Routine initialization
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Flow
  Routine welcome_screen
  Routine warning_prep
  Routine Experiment1_countdown
  Routine second_prep
  Routine Experiement2_countdown
  Routine Experiement2_instruction
  Routine Experiment2_imageselection
  Routine End
